PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = Test1
  keyboardBackend = ioHub
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Routines
  Routine WelcomeScreen
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    TextComponent welcome_message
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text [set every frame]:
        Welcome to the Experiment!!

        Disclaimer: This experiment involves viewing flickering objects. If you are prone to photosensitive epilepsy or have other visual sensitivities, please proceed with caution or consider not participating. Just so we're clear, we can't take responsibility for any discomfort or issues that arise.
    ImageComponent caution_sign
      image = Floor_Sign_Yield_Caution_Sign_Creative_Safety_Supply__92002.jpg
      pos = (0.3, 0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine blank1s
    RoutineSettingsComponent blank1s
      stopVal [duration (s)] = 1
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      desc:
        Turn Screen Blank for 1 second
    TextComponent blank_screen
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine test_2
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    PolygonComponent obj1_t2
      fillColor = black
      lineColor = 0.0000, 0.0000, 0.0000
      pos = (-0.25, 0)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    PolygonComponent obj2_t2
      fillColor = white
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    PolygonComponent obj3_t2
      fillColor = white
      pos = (0.25, 0)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    TextComponent test_2_mess
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Focus on the black square
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    CodeComponent test_2_code
      Code Type = Py
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      Begin Experiment:
        trial_num = 0
      Begin Routine:
        # Frequencies for each object
        freq_trial_1 = [10, 5, 2]

        # Frequencies for each object
        objects = [obj1_t2, obj2_t2, obj3_t2]

        if trial_num == 1:
            obj1_t2.color = 'white'
            obj2_t2.color = 'black'
      Each Frame:
        # Update opacities based on current frame number for each stimulus
        i = 0
        for freq in freq_trial_1:
            frames_per_cycle = 60 // freq
            objects[i].opacity = ((frameN % frames_per_cycle) < (frames_per_cycle / 2))
            i = i + 1
      End Routine:
        trial_num = trial_num + 1
  Routine test
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  Routine GoodBye
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  Routine test_1
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    PolygonComponent obj1_t1
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = 0.0000, 0.0000, 0.0000
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    TextComponent test_1_mess
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Focus on the black square
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    CodeComponent test_1_code
      Code Type = Py
      Begin Routine:
        # Frequencies for each object
        freq_obj1 = 15

        # Frames per cycle for each object (full cycle = one on and one off phase)
        frames_per_cycle_obj1 = 60 // freq_obj1
      Each Frame:
        # Update opacities based on current frame number for each stimulus
        # Object 1
        obj1_t1.opacity = ((frameN % frames_per_cycle_obj1) < (frames_per_cycle_obj1 / 2))
  Routine test_3
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    PolygonComponent obj1_t3
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = 0.0000, 0.0000, 0.0000
      pos = (-0.25, 0.25)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    PolygonComponent obj2_t3
      fillColor = white
      lineColor = 0.0000, 0.0000, 0.0000
      pos = (0.25, 0.25)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    PolygonComponent obj3_t3
      fillColor = white
      lineColor = 0.0000, 0.0000, 0.0000
      pos = (-0.25, -0.25)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    PolygonComponent obj4_t3
      fillColor = white
      lineColor = 0.0000, 0.0000, 0.0000
      pos = (0.25, -0.25)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    TextComponent test_3_mess
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Focus on the black square
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    CodeComponent test_3_code
      Code Type = Py
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      Begin Routine:
        # Frequencies for each object
        freq_trial_1 = [10, 5,
                       2, 15]

        # Frequencies for each object
        objects = [obj1_t3, obj2_t3, obj3_t3, obj4_t3]

        if trial_num == 3:
            obj1_t3.color = 'white'
            obj2_t3.color = 'black'
      Each Frame:
        i = 0
        for freq in freq_trial_1:
            frames_per_cycle = 60 // freq
            objects[i].opacity = ((frameN % frames_per_cycle) < (frames_per_cycle / 2))
            i = i + 1
      End Routine:
        trial_num = trial_num + 1
  Routine test_4
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    PolygonComponent obj1_t4
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = 0.0000, 0.0000, 0.0000
      pos = (-0.25, 0.25)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    PolygonComponent obj2_t4
      fillColor = white
      pos = (0, 0.25)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    PolygonComponent obj3_t4
      fillColor = white
      pos = (0.25, 0.25)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    PolygonComponent obj4_t4
      fillColor = white
      pos = (-0.25, 0)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    PolygonComponent obj5_t4
      fillColor = white
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    PolygonComponent obj6_t4
      fillColor = white
      pos = (0.25, 0)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    PolygonComponent obj7_t4
      fillColor = white
      pos = (-0.25, -0.25)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    PolygonComponent obj8_t4
      fillColor = white
      pos = (0, -0.25)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    PolygonComponent obj9_t4
      fillColor = white
      pos = (0.25, -0.25)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    TextComponent test_4_mess
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Focus on the black square
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    CodeComponent test_4_code
      Code Type = Py
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      Begin Routine:
        # Frequencies for each object
        freq_trial_1 = [10, 5, 2,
                        15, 8, 12,
                        20, 25, 30]

        # Frequencies for each object
        objects = [obj1_t4, obj2_t4, obj3_t4,
                   obj4_t4, obj5_t4, obj6_t4,
                   obj7_t4, obj8_t4, obj9_t4,]

        if trial_num == 3:
            obj1_t3.color = 'white'
            obj2_t3.color = 'black'
      Each Frame:
        i = 0
        for freq in freq_trial_1:
            frames_per_cycle = 60 // freq
            objects[i].opacity = ((frameN % frames_per_cycle) < (frames_per_cycle / 2))
            i = i + 1
Flow
  Routine WelcomeScreen
  LoopInitiator trials_1 loopType="TrialHandler"
    loopType = sequential
    nReps = 10
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    LoopInitiator repetition_1 loopType="TrialHandler"
      loopType = sequential
      nReps = 10
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      Routine test_1
      Routine blank1s
    LoopTerminator repetition_1
  LoopTerminator trials_1
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = sequential
    nReps = 10
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    LoopInitiator repetition_2 loopType="TrialHandler"
      loopType = sequential
      nReps = 10
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      Routine test_2
      Routine blank1s
    LoopTerminator repetition_2
  LoopTerminator trials_2
  LoopInitiator trials_3 loopType="TrialHandler"
    loopType = sequential
    nReps = 10
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    LoopInitiator repetition_3 loopType="TrialHandler"
      loopType = random
      nReps = 10
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      Routine test_3
      Routine blank1s
    LoopTerminator repetition_3
  LoopTerminator trials_3
  LoopInitiator trials_4 loopType="TrialHandler"
    loopType = sequential
    nReps = 10
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    LoopInitiator repetition_4 loopType="TrialHandler"
      loopType = sequential
      nReps = 10
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      Routine test_4
      Routine blank1s
    LoopTerminator repetition_4
  LoopTerminator trials_4
  Routine GoodBye
